"@(#)lcpsgset 11.1 5/7/96 Copyright (c) 1991-1996 Varian Assoc.,Inc. All Rights Reserved."
" @(#)psgset 9.1 9/28/93 Copyright (c) 1991-1996 Varian Assoc.,Inc. All Rights Reserved "
"**********************************************************"
" psgset.m - set up parameters for sepcific pulse sequence "
"            using information in user or system parlib    "
"**********************************************************"
if ($#<1) then 
  write('error','psgset - no pulse sequence name supplied')
  return
  endif
seqfil=$1 pslabel=$1
exists(userdir+'/parlib','file'):$e
if ($e<>0) then
  exists(userdir+'/parlib/'+$1+'.par','file'):$e 
endif
if ($e<>0) then 
  $rtvfile=userdir+'/parlib/'+$1
else
  $rtvfile=systemdir+'/parlib/'+$1
  exists($rtvfile+'.par','file'):$e 
  if ($e=0) then
    write('error','psgset - no parameters for pulse sequence %s',$1)
    return
  endif
endif
"prune($rtvfile+'.par/procpar') - this needed to be commented out"
if ($#=2) then rtv($rtvfile,$2) endif
if ($#=3) then rtv($rtvfile,$2,$3) endif
if ($#=4) then rtv($rtvfile,$2,$3,$4) endif
if ($#=5) then rtv($rtvfile,$2,$3,$4,$5) endif
if ($#=6) then rtv($rtvfile,$2,$3,$4,$5,$6) endif
if ($#=7) then rtv($rtvfile,$2,$3,$4,$5,$6,$7) endif
if ($#=8) then rtv($rtvfile,$2,$3,$4,$5,$6,$7,$8) endif
if ($#=9) then rtv($rtvfile,$2,$3,$4,$5,$6,$7,$8,$9) endif
if ($#=10) then rtv($rtvfile,$2,$3,$4,$5,$6,$7,$8,$9,$10) endif
if ($#=11) then rtv($rtvfile,$2,$3,$4,$5,$6,$7,$8,$9,$10,$11) endif
if ($#=12) then rtv($rtvfile,$2,$3,$4,$5,$6,$7,$8,$9,$10,$11,$12) endif
if ($#>12) then write('error','psgset - too many arguments') return endif
clear
