"       Varian Associates   VNMR   @(#)shphmqc 1.3 3/20/89 "
"*******************************************************"
" shphmqc_3rf - sets up parameters in accordance with the shphmqc_3rf "
"        pulse sequence. Uses third channel for X          "
"*******************************************************"

exists('satfrq','parameter'):$e
if $e then
   $satdly=satdly $satfrq=satfrq $satpwr=satpwr endif
par2d par3rf
psgset('shphmqc_3rf','satdly','satfrq','satpwr','satmode','array','null','taumb')
psgset('shphmqc_3rf','dmf2','dn2','j','pwx2lvl','pwx2','dpwr2','dof2','sw1','ni','mbond')
psgset('shphmqc_3rf','phase','tpwr','pw','ss','dm2','dmm2','d1','at','dgs','hs')
psgset('shphmqc_3rf','p1','dg','ap','dg2','dseq2','dseq','pwx','pwxlvl','shape')

if $e then satdly=$satdly satfrq=$satfrq satpwr=$satpwr satmode='y' endif
np=1024
seqfil='shphmqc_3rf'
ph  bs='n'  homo='n'  wshim='n'
nt=nt/16  nt=nt*16
if (nt = 0) then nt=16 endif
axis='p3' ni=1 phase=1
mbond='n'  taumb=0
sb=at sbs=-at 
lb='n' lb1='n' gf='n' gf1='n'
wexp='' wnt='' wbs=''
