" @(#)noesy 9.1 9/28/93 Copyright (c) 1991,1993 Varian Assoc.,Inc. All Rights Reserved "
"*********************************************************"
" noesy - sets up parameters in accordance with the noesy "
"         pulse sequence.                                 "
"*********************************************************"
"wetnoesy - modified for LCNMR "
"PAKeifer 950718 "


lcset2d('noesy')
lcpsgset('noesy','mix','phase','dg','ap','dgs','ss','dm','dmm')
lcpsgset('noesy','hs','hst','sspul','presat','array')
ph  ss=8  rp1=0  lp1=0
if (nt>16) then
   nt=nt/16
   nt=nt*16
else
   nt=16
endif
pw=pw90  axis='pp'  d1=1.8 sw1=sw rfl1=rfl rfp1=rfp 
pmode='full'

lcpsgset('wetnoesy','dg','ap','dg2','dglc')
dg
man('wetnoesy')
write('line3','Parameters created for a WET NOESY')


