adequate_AD.c
    a sequence for proton detected INADEQUATE

REF: B. Rief, M. Koeck, R. Kerssebaum, H. Kang,
         W. Fenical and C. Griesinger : JMR A 118, 282-285 (1996)
     M. Koeck, B. Rief, W. Fenical and C. Griesinger : Tetrahedron Letters,
                                   Vol. 37. No. 3. 363-366 (1996).

    sspul   - option for GRD-90-GRD steady-state pulses
    gt0     - gradient duration for sspul
    gzlvl0  - gradient power level for sspul
    gt1     - first gradient duration
    gzlvl1  - first gradient power level
    gt2     - second gradient duration
    gzlvl2  - second gradient duration
    gt3     - second gradient duration
    gzlvl3  - second gradient duration
    recovery- gradient recovery delay
    pwxlvl  - decoupler power level for hard decoupler pulses
    pwx     - pulse width for hard decoupler pulses
    dpwr    - power level for decoupling
    dmf     - controlled by dpwr
    j       - one-bond heteronuclear coupling constant (140 for 13C; 90 for 15N)
    jcc     - CC coupling constant (55 - 35 Hz)
    satmode - a y/n flag for transmitter presaturation
    satdly  - the presaturation delay used if satmode = y
    satpwr  - the presaturation power
    satfrq  - the frequency desired for presaturation
    f1180   - a y/n flag for 1/2 dwell starting t1 evolution delay
    nt      - works with nt=1 (nt=2 improves data)
    phase   - use phase=1,2 to select for States-TPPI
            - transform with wftse = wft2d('ntype',1,0,-1,0,0,1,0,1)
    kappa   - 0 gives C-C Double Quantum evolution in F1
            - 1 gives C-C Single Quantum evolution in F1 (i.e. C13 chemical shifts)
                in this case ni is limited (nimax is handled by the sequence)
    ad180   - adiabatic pulse of length 30*pwx and bandwidth 1/pwx
                 calculated and set inside the sequence
    av180   - av180b refocussing pulse of bandwidth 1.54*B1max (pw = 9.45/bw)
                 calculated and set inside the sequence
    dof     - decoupler offset for pulses (including quaternaries)
    dofdec  - decoupler offset for decoupling during acq. (protonated carbon reg.)

All shapes are created internally. Be sure that to avoid pwxlvl settings with
compression factors < 0.9.
The following table gives an insight under what conditions the refocussing
pulses give proper performance:

        pwx(square)     gamab1          pw(av180)       C13 range refocussed (kHz)
        8.15 (usec)     30.5 (kHz)      200 (usec)      40.0 (kHz)
        9.15            27.3            225             36
        10.2            24.6            250             32
        11.2            22.3            275             29.3
        12.2            20.5            300             26.5
        13.2            18.9            325             24.5
        14.2            17.5            350             23
        15.2            16.4            375             21
        16.3            15.4            400             20

INOVA implementation: Norbert Zimmermann, BASF AG 08.08.96
      modified : Peter Sandor, Darmstadt, March 1997 - kappa is introduced
      modified : Eriks Kupce, Oxford, October 1998 - adiabatic pulses
      modified : Peter Sandor,RC, Darmstadt, 2003 - all C13 180s are shaped
