*************************************************************
wet1d - macro for creating wet1d parameters from an s2pul parameter set
        (see the dglc parameter screen)
*************************************************************

  wet - a y/n flag determining whether the WET element is used
        (which uses pwwet, wetpwr, wetshape, gtw, gzlvlw, and gswet).
  wetpwr - the power level for the WET element.
  pwwet - the pw90 pulse width at wetpwr.
  wetshape - the pulse shape used during the wet element.
  gtw - the duration of the spoiling gradient (in sec).
  gzlvlw - the amplitude of the gtw gradient. 
  gswet - the recovery time following each gradient (try 0.002).

  c13wet - a y/n flag controlling the selective 13C decoupling used during WET
        (which uses dorwet, dpwrwet, and dmfwet; hardcoded to be WALTZ).
  dofwet - the 13C decoupler offset used during WET.
  dpwrwet - the decoupler power level for c13wet.
  dmfwet - the dmf value used for c13wet.

  dz - the delay following the wet element to allow longitudinal recovery
        (like a T1IR or WEFT inversion recovering through zero).
  composit - a y/n flag determining whether a composite read pulse is used.

