*************************************************************
wetpwxcal - macro for creating pwxcal parameters from a WET parameter set
        (see the dglc parameter screen)
*************************************************************

  wet - a y/n flag determining whether the WET element is used
        (which uses pwwet, wetpwr, wetshape, gtw, gzlvlw, and gswet).
  wetpwr - the power level for the WET element.
  pwwet - the pw90 pulse width at wetpwr.
  wetshape - the pulse shape used during the wet element.
  gtw - the duration of the spoiling gradient (in sec).
  gzlvlw - the amplitude of the gtw gradient. 
  gswet - the recovery time following each gradient (try 0.002).

  c13wet - a y/n flag controlling the selective 13C decoupling used during WET
        (which uses dorwet, dpwrwet, and dmfwet; hardcoded to be WALTZ).
  dofwet - the 13C decoupler offset used during WET.
  dpwrwet - the decoupler power level for c13wet.
  dmfwet - the dmf value used for c13wet.

  dz - the delay following the wet element to allow longitudinal recovery
        (like a T1IR or WEFT inversion recovering through zero).
  composit - a y/n flag determining whether a composite read pulse is used.

           ***************************************************
           ***  pwxcal - Decoupler Pulse Calibration     ***
           ***************************************************

Parameters:	pwx1	Proton pulse width on first decoupler (usec)
           	pwx2	Proton pulse width on second decoupler (usec)
           	pwx3	Proton pulse width on third decoupler (usec)
		jC13	C13-H1 coupling constant
		jN15	N15-H1 coupling constant
		jP31	P31-H1 coupling constant
                jname   selected calibration nucleus

Technique:	The pulse sequence "pwxcal" is used for determining the
                pulse width characteristics of the probe's decoupler
                channel[s] in indirect or triple resonance experiments.
                The pulse sequence can also be used for determining
                the RF field homogeneity of the decoupler.

                The parameter pwx1 is arrayed to calibrate the 90 degree pulse
                width on the first decoupler.  If a second decoupler is present,
                the parameter pwx2 is arrayed to calibrate the 90 degree pulse
                width on that decoupler.  If a third decoupler is present,
                the parameter pwx3 is arrayed to calibrate the 90 degree pulse
                width on that decoupler.

                The pwxcal macro provides an interactive method of
                selecting the decoupler to calibrate and the nucleus
                (C13, N15, or P31) to calibrate.

Note: the pwxcal pulse sequence is not supplied with GEMINI 2000.
